PsychoPy2experiment version="1.73.05"
Settings
  Save csv file = True
  Monitor = CNI_LCD
  color = $[.2,.2,.2]
  Window size (pixels) = [1280, 800]
  Full-screen window = False
  Experiment info = {'participant':'', 'session':'01'}
  Save excel file = True
  Units = norm
  Screen = 2
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Routines
  Routine eyeCal
    CodeComponent code_8
      Begin Experiment:
        import math
        eyeCalPos = [(.5,.5),(-.5,-.5),(.5,-.5),(-.5,.5),(0,.5),(.5,0),(-.5,0),(0,-.5),(0,0)]
      Each Frame:
        while eyeCalClock.getTime() < 12.0:
            [radius,index] = math.modf(eyeCalClock.getTime()/1.2)
            index = int(index)
            if index<9:
                if index!=prevIndex:
                    prevIndex = index
                    try:
                        ser = serial.Serial(device, 115200, timeout=.1)
                        ser.write('[s,{"cmd":"mark","val":"Cal'+str(eyeCalPos[index])+'"}]\n')
                        ser.close()
                    except:
                        pass
                rad = (1-min(radius,.85))*.1
                greenCircle.setPos(eyeCalPos[index])
                greenCircle.setRadius(rad)
                greenCircle.draw()
                win.flip(clearBuffer=True)
            else:
                win.flip(clearBuffer=True)
            if event.getKeys(["escape"]): core.quit()
      Begin Routine:
        prevIndex = -1
        greenCircle = visual.Circle(win=win, units='norm', pos=(0,0), radius=.1, lineWidth=0, fillColor='green',lineColor='green')
  Routine start_tracking
    CodeComponent code_2
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"cmd":"stop"}]\n')
            time.sleep(0.1)
            ser.write('[s,{"cmd":"start","file":"lit2"}]\n')
            ser.close()
            time.sleep(0.2)
        except:
            pass
  Routine Relax
    TextComponent RelaxText
      color = black
      text = Please let us know if you can't see the gray rectangle. There will be a couple of anatomical scans before we do the reading task. So just relax and close your eyes if you'd like. We'll talk to you and let you know when we're ready to start the task.
      units = pix
      startVal [time (s)] = 1
      letterHeight = 23
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    KeyboardComponent key_resp
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = ['space']
      startVal [time (s)] = 2
      store = nothing
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    CodeComponent RelaxRectCode
      Each Frame:
        visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='gray', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
  Routine ecInstruct
    TextComponent instrText
      color = black
      text = Eye tracker calibration. After this text disappears, you will see a green circle that will jump around the screen. Try to keep your eyes fixated on the circle at all times.
      units = pix
      startVal [time (s)] = 1
      letterHeight = 28
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = ['space']
      startVal [time (s)] = 2
      store = nothing
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  Routine trial
    CodeComponent eyeMarker
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            time.sleep(0.1)
            ser.write('[s,{"cmd":"mark","val":"start'+str(currentLoop.thisIndex)+'"}]\n')
            ser.close()
        except:
            pass
      End Routine:
        try:
            time.sleep(0.1)
            ser = serial.Serial(device, 115200, timeout=1)
            time.sleep(0.1)
            ser.write('[s,{"cmd":"mark","val":"end'+str(currentLoop.thisIndex)+'"}]\n')
            ser.close()
        except:
            pass
        time.sleep(0.1)
    TextComponent paragraphs
      color = black
      text [set every repeat] = $text
      units = pix
      startVal [time (s)] = 8
      letterHeight = 23
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    KeyboardComponent resp
      forceEndRoutine = True
      allowedKeys = ["1", "n"]
      startVal [time (s)] = 1
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    CodeComponent code
      Each Frame:
        if (t >= 5):
            visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor=itemColor, vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
        if (t < 5):
            visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='gray', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
      Begin Routine:
        print 'begin text ('+str(mainClock.getTime())+')'
      End Routine:
        print "key=%s, rt=%f" % (resp.keys,resp.rt)
        print 'end text ('+str(mainClock.getTime())+')'
  Routine init
    CodeComponent init_code
      Begin Experiment:
        import serial
        import datetime
        import time
        device = '/dev/ttyACM1'
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"cmd":"stop"}]\n')
            ser.close()
            time.sleep(0.2)
        except:
            pass

        mainClock=core.Clock()
  Routine thanks
    CodeComponent code_3
      Begin Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[s,{"cmd":"stop"}]\n')
            ser.close()
        except:
            pass
    TextComponent thanksText
      color = black
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
  Routine instruct_green
    TextComponent instrText_2
      color = black
      units = pix
      startVal [time (s)] = 0
      letterHeight = 23
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      text:
        The following text will be surrounded by a GREEN border. Read as you normally would when reading for pleasure, as though you just picked up this book off the bookshelf and are reading in your favorite place.

        None of this material will be tested.

        Press the button with your thumb when you're done with a paragraph. The experiment will start momentarily.
    KeyboardComponent ready_2
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = ['space']
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_5
      Each Frame:
        visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='green', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
      End Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[t]\n[t]\n')
            ser.close()
        except:
            pass
  Routine instruct_red
    TextComponent instrText_3
      color = black
      units = pix
      startVal [time (s)] = 0
      letterHeight = 23
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      text:
        The following text will be surrounded by a RED border.

        Please read the novel with heightened attention and do a close reading for literary analysis. You'll be tested on this material when you leave the scanner and asked to write a short literary essay.

        Pay attention to how the story's structure is constructed, or crafted, noticing literary details such as setting, narration, tone, and characterization.

        Focus on literary themes and patterns, word choice, syntax, and the order in which sentences and ideas unfold.

        Press the button with your thumb when you're done with a paragraph. The experiment will start momentarily.
    KeyboardComponent ready_3
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = ['space']
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_6
      Each Frame:
        visual.ShapeStim(win=win, units='norm', lineWidth=5, lineColor='red', vertices=((.5,.8),(.5,-.8),(-.5,-.8), (-.5,.8))).draw()
      End Routine:
        try:
            ser = serial.Serial(device, 115200, timeout=1)
            ser.write('[t]\n[t]\n')
            ser.close()
        except:
            pass
Flow
  Routine Relax
  Routine init
  Routine start_tracking
  Routine ecInstruct
  Routine eyeCal
  Routine eyeCal
  Routine instruct_red
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = textA2.csv
    loopType = sequential
    nReps = 1
    endPoints = [1, 2]
    conditions:
      [{'text': u'CHAPTER TWO\n\nThe little girl performed her long journey in safety; and at Northampton was met by Mrs. Norris, who thus regaled in the credit of being foremost to welcome her, and in the importance of leading her in to the others, and recommending her to their kindness.\n\nFanny Price was at this time just ten years old, and though there might not be much in her first appearance to captivate, there was, at least, nothing to disgust her relations. She was small of her age, with no glow of complexion, nor any other striking beauty; exceedingly timid and shy, and shrinking from notic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,
      {'text': u'Sir Thomas and Lady Bertram received her very kindly; and Sir Thomas, seeing how much she needed encouragement, tried to be all that was conciliating: but he had to work against a most untoward gravity of deportment; and Lady Bertram, without taking half so much trouble, or speaking one word where he spoke ten, by the mere aid of a good-humoured smile, became immediately the less awful character of the two.\n\nThe young people were all at home, and sustained their share in the introduction very well, with much good humour, and no embarrassment, at least on the part of the sons, who,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,
      {'text': u"The two girls were more at a loss from being younger and in greater awe of their father, who addressed them on the occasion with rather an injudicious particularity. But they were too much used to company and praise to have anything like natural shyness; and their confidence increasing from their cousin's total want of it, they were soon able to take a full survey of her face and her frock in easy indifference.\n\nThey were a remarkably fine family, the sons very well-looking, the daughters decidedly handsome, and all of them well-grown and forward of their age, which produced as st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,
      {'text': u'There were in fact but two years between the youngest and Fanny. Julia Bertram was only twelve, and Maria but a year older. The little visitor meanwhile was as unhappy as possible. Afraid of everybody, ashamed of herself, and longing for the home she had left, she knew not how to look up, and could scarcely speak to be heard, or without crying. Mrs. Norris had been talking to her the whole way from Northampton of her wonderful good fortune, and the extraordinary degree of gratitude and good behaviour which it ought to produce, and her consciousness of misery was therefore increased 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
    Routine trial
  LoopTerminator trials_1
  Routine ecInstruct
  Routine eyeCal
  Routine instruct_green
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = textB2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': u"Her elder cousins mortified her by reflections on her size, and abashed her by noticing her shyness: Miss Lee wondered at her ignorance, and the maid-servants sneered at her clothes; and when to these sorrows was added the idea of the brothers and sisters among whom she had always been important as playfellow, instructress, and nurse, the despondence that sunk her little heart was severe.\n\nThe grandeur of the house astonished, but could not console her. The rooms were too large for her to move in with ease: whatever she touched she expected to injure, and she crept about in const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,
      {'text': u"A week had passed in this way, and no suspicion of it conveyed by her quiet passive manner, when she was found one morning by her cousin Edmund, the youngest of the sons, sitting crying on the attic stairs.\n\n'My dear little cousin,' said he, with all the gentleness of an excellent nature, 'what can be the matter?' And sitting down by her, he was at great pains to overcome her shame in being so surprised, and persuade her to speak openly. Was she ill? or was anybody angry with her? or had she quarrelled with Maria and Julia? or was she puzzled about anything in her lesson that he c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,
      {'text': u"For a long while no answer could be obtained beyond a 'no, no\u2014not at all\u2014no, thank you'; but he still persevered; and no sooner had he begun to revert to her own home, than her increased sobs explained to him where the grievance lay. He tried to console her.\n\n'You are sorry to leave Mama, my dear little Fanny,' said he, 'which shows you to be a very good girl; but you must remember that you are with relations and friends, who all love you, and wish to make you happy. Let us walk out in the park, and you shall tell me all about your brothers and sisters.'\n\nOn pursuing t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,
      {'text': u"William, the eldest, a year older than herself, her constant companion and friend; her advocate with her mother (of whom he was the darling) in every distress. 'William did not like she should come away; he had told her he should miss her very much indeed.' 'But William will write to you, I dare say.' 'Yes, he had promised he would, but he had told her to write first.' 'And when shall you do it?' She hung her head and answered hesitatingly, 'she did not know; she had not any paper.'\n\n'If that be all your difficulty, I will furnish you with paper and every other material, and you m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
    Routine trial
  LoopTerminator trials_2
  Routine ecInstruct
  Routine eyeCal
  Routine instruct_red
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = textC2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': u"To her cousins she became occasionally an acceptable companion. Though unworthy, from inferiority of age and strength, to be their constant associate, their pleasures and schemes were sometimes of a nature to make a third very useful, especially when that third was of an obliging, yielding temper; and they could not but own, when their aunt inquired into her faults, or their brother Edmund urged her claims to their kindness, that 'Fanny was good-natured enough.'", 'itemColor': u'red'},
      {'text': u'Edmund was uniformly kind himself; and she had nothing worse to endure on the part of Tom than that sort of merriment which a young man of seventeen will always think fair with a child of ten. He was just entering into life, full of spirits, and with all the liberal dispositions of an eldest son, who feels born only for expense and enjoyment. His kindness to his little cousin was consistent with his situation and rights: he made her some very pretty presents, and laughed at her.\n\nAs her appearance and spirits improved, Sir Thomas and Mrs. Norris thought with greater satisfaction o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,
      {'text': u"A mean opinion of her abilities was not confined to them. Fanny could read, work, and write, but she had been taught nothing more; and as her cousins found her ignorant of many things with which they had been long familiar, they thought her prodigiously stupid, and for the first two or three weeks were continually bringing some fresh report of it into the drawing-room. 'Dear mama, only think, my cousin cannot put the map of Europe together\u2014or my cousin cannot tell the principal rivers in Russia\u2014or, she never heard of Asia Minor\u2014or she does not know the difference betw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,
      {'text': u"'My dear,' their considerate aunt would reply, 'it is very bad, but you must not expect everybody to be as forward and quick at learning as yourself.'\n\n'But, aunt, she is really so very ignorant!\u2014Do you know, we asked her last night which way she would go to get to Ireland; and she said, she should cross to the Isle of Wight. She thinks of nothing but the Isle of Wight, and she calls it the Island, as if there were no other island in the world. I am sure I should have been ashamed of myself, if I had not known better long before I was so old as she is. I cannot remember the t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
    Routine trial
  LoopTerminator trials_3
  Routine ecInstruct
  Routine eyeCal
  Routine instruct_green
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = textD2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': u"As for Fanny's being stupid at learning, 'she could only say it was very unlucky, but some people were stupid, and Fanny must take more pains: she did not know what else was to be done; and, except her being so dull, she must add she saw no harm in the poor little thing, and always found her very handy and quick in carrying messages, and fetching what she wanted.'\n\nFanny, with all her faults of ignorance and timidity, was fixed at Mansfield Park, and learning to transfer in its favour much of her attachment to her former home, grew up there not unhappily among her cousins. There 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,
      {'text': u'From about the time of her entering the family, Lady Bertram, in consequence of a little ill-health, and a great deal of indolence, gave up the house in town, which she had been used to occupy every spring, and remained wholly in the country, leaving Sir Thomas to attend his duty in Parliament, with whatever increase or diminution of comfort might arise from her absence. In the country, therefore, the Miss Bertrams continued to exercise their memories, practise their duets, and grow tall and womanly: and their father saw them becoming in person, manner, and accomplishments, everythi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,
      {'text': u'His eldest son was careless and extravagant, and had already given him much uneasiness; but his other children promised him nothing but good. His daughters, he felt, while they retained the name of Bertram, must be giving it new grace, and in quitting it, he trusted, would extend its respectable alliances; and the character of Edmund, his strong good sense and uprightness of mind, bid most fairly for utility, honour, and happiness to himself and all his connexions. He was to be a clergyman.', 'itemColor': u'green'},
      {'text': u'Amid the cares and the complacency which his own children suggested, Sir Thomas did not forget to do what he could for the children of Mrs. Price: he assisted her liberally in the education and disposal of her sons as they became old enough for a determinate pursuit; and Fanny, though almost totally separated from her family, was sensible of the truest satisfaction in hearing of any kindness towards them, or of anything at all promising in their situation or conduct.', 'itemColor': u'green'}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
    Routine trial
  LoopTerminator trials_4
  Routine thanks
